WorkflowBuilder(Version=2.8.1)
GroupWorkflow Utils
    GroupWorkflow PrepareNewTrial
        SubscribeSubject RequestNewTrial
        -> IntProperty(Value=0)
        -> MulticastSubject ResponsePoke

        SubscribeSubject RequestNewTrial
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimeToCNP
        -> MulticastSubject TimedOptoOnset
        -> MulticastSubject TimedSoundOnset
        -> MulticastSubject TimedRT
        -> MulticastSubject TimedMT
        -> MulticastSubject TimedLNP

        SubscribeSubject RequestNewTrial => #11
        -> Condition "TrialsCompleted == TrialsPerBlock"
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialsPerBlock) => #2
            #0, #2 -> CombineLatest
            -> GreaterThanOrEqual => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
            -> Equal(Operand=BooleanProperty(Value=false)) => #7
            SubscribeSubject BlockPerformance => #8
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.Value) => #10
            #8, #10 -> CombineLatest
            -> GreaterThanOrEqual => #12
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #14
            #12, #14 -> CombineLatest
            -> LogicalAnd => #16
            #7, #16 -> CombineLatest
            -> LogicalOr => #18
            #4, #18 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> GroupWorkflow StartNewBlock(Description="Resets every block subject (variable) and updates the training level if needed")
            WorkflowInput Source1 => #0
            SubscribeSubject Block => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Block => #5
            -> Condition UpdateTrainingLevelCondition(Description="!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels))") => #6
                SubscribeSubject TrainingLevel => #0
                SubscribeSubject TrainingConfig
                -> MemberSelector(Selector=Levels.Count)
                -> Subtract(Operand=IntProperty(Value=1)) => #3
                #0, #3 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            SubscribeSubject TrainingLevel => #7
            #6, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrainingLevel => #11
            #5 -> Condition !UpdateTrainingLevelCondition(Description="!(!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels)))") => #12
                SubscribeSubject TrainingLevel => #0
                SubscribeSubject TrainingConfig
                -> MemberSelector(Selector=Levels.Count)
                -> Subtract(Operand=IntProperty(Value=1)) => #3
                #0, #3 -> WithLatestFrom
                -> GreaterThanOrEqual
                -> WorkflowOutput
            #11, #12 -> Merge
            -> IntProperty(Value=0)
            -> MulticastSubject BlockTrial
            -> DoubleProperty(Value=0)
            -> MulticastSubject TrialsCompleted
            -> MulticastSubject RightAnswers
            -> MulticastSubject BlockPerformance
            -> MulticastSubject TrialsAborted
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #14
        #11 -> Condition "TrialsCompleted != TrialsPerBlock" => #15
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialsPerBlock) => #2
            #0, #2 -> CombineLatest
            -> GreaterThanOrEqual => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
            -> Equal(Operand=BooleanProperty(Value=false)) => #7
            SubscribeSubject BlockPerformance => #8
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.Value) => #10
            #8, #10 -> CombineLatest
            -> GreaterThanOrEqual => #12
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #14
            #12, #14 -> CombineLatest
            -> LogicalAnd => #16
            #7, #16 -> CombineLatest
            -> LogicalOr => #18
            #4, #18 -> CombineLatest
            -> LogicalAnd
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #14, #15 -> Merge
        -> GroupWorkflow UpdateTrialNumbers(Description="Updates the total trial number and the block trial number")
            WorkflowInput Source1
            -> BehaviorSubject UTN

            SubscribeSubject UTN => #2
            SubscribeSubject Trial => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Trial => #7
            SubscribeSubject UTN => #8
            SubscribeSubject BlockTrial => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject BlockTrial => #13
            #7, #13 -> Zip
            -> WorkflowOutput
        -> GroupWorkflow RandomizeLouderSpeaker
            WorkflowInput Source1
            -> BehaviorSubject RLS

            SubscribeSubject RLS
            -> SelectMany PickSoundIndex
                WorkflowInput Source1 => #0
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=Sounds) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                SubscribeSubject SoundChoiceDistribution
                -> Bonsai.Numerics.Distributions.Sample
                -> PropertyMapping(Value) => #7
                #4, #7 -> Index(Operand=IntProperty(Value=0))
                -> MemberSelector(Selector=Index)
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput

            SubscribeSubject RLS
            -> GroupWorkflow RemainingLevels
                WorkflowInput Source1 => #0
                -> Condition "RepeatTrial == 0" => #1
                    SubscribeSubject RepeatTrial
                    -> Equal(Operand=BooleanProperty(Value=false))
                    -> WorkflowOutput
                -> GroupWorkflow ABL => #2
                    WorkflowInput Source1 => #0
                    -> Condition !UseLevelABL
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.Abl.UseLevelAbl)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow RandomABL => #2
                        WorkflowInput Source1
                        -> GroupWorkflow PickRandomIndex
                            WorkflowInput Source1
                            -> GroupWorkflow NewABLRequest => #1
                                WorkflowInput Source1 => #0
                                SubscribeSubject LevelConfig
                                -> MemberSelector(Selector=Sound.Abl.ChangeEveryTrial) => #2
                                SubscribeSubject BlockTrial => #3
                                #2, #3 -> CombineLatest => #4
                                #0, #4 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> Bonsai.Scripting.Expressions.ExpressionCondition "ChangeEveryTrial || BlockTrial == 1"
                                  Expression: Item1 || Item2 == 1
                                -> MemberSelector(Selector=Item1)
                                -> WorkflowOutput
                            SubscribeSubject Random => #2
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.AblList.Count)
                            -> Subtract(Operand=IntProperty(Value=1))
                            -> PropertyMapping(Upper) => #6
                            #2, #6 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #7
                            #1, #7 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> WorkflowOutput
                        -> InputMapping(Selector=it, Index(Selector=it))
                        -> SelectMany ABLValue
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.AblList) => #1
                            ExternalizedMapping(Value(DisplayName=Index)) => #2
                            #1, #2 -> Index(Operand=IntProperty(Value=1))
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #0 -> Condition UseLevelABL => #3
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.Abl.UseLevelAbl)
                        -> WorkflowOutput
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=Sound.Abl.LevelAbl) => #5
                    #3, #5 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #7
                    #2, #7 -> Merge
                    -> MulticastSubject ABL
                    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=2, PrintSubjectName=PrintCode)
                    -> WorkflowOutput
                #1 -> GroupWorkflow ILD => #3
                    WorkflowInput Source1 => #0
                    -> Condition "CycleILD == 0"
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Sound.CycleIld)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow PickRandomIndex
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random => #1
                        SubscribeSubject ILDs
                        -> MemberSelector(Selector=Length)
                        -> Subtract(Operand=IntProperty(Value=1))
                        -> PropertyMapping(Upper) => #5
                        #1, #5 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #6
                        #0, #6 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    -> InputMapping(Selector=it, Index(Selector=it))
                    -> SelectMany ILDValue => #4
                        SubscribeSubject ILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=1))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "CycleILD != 0" => #5
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Sound.CycleIld)
                        -> WorkflowOutput
                    SubscribeSubject ILDIndex => #6
                    #5, #6 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #8
                    -> GroupWorkflow UpdateILDIndex => #9
                        WorkflowInput Source1
                        -> Add(Operand=DoubleProperty(Value=1)) => #1
                        SubscribeSubject ShuffledILDs
                        -> MemberSelector(Selector=Length) => #3
                        #1, #3 -> WithLatestFrom => #4
                        -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex != NumILDs"
                          Expression: Item1 != Item2
                        -> MemberSelector(Selector=Item1) => #6
                        #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex == NumILDs"
                          Expression: Item1 == Item2
                        -> DoubleProperty(Value=0)
                        -> MulticastSubject NewILDShuffle => #9
                        #6, #9 -> Merge
                        -> MulticastSubject ILDIndex
                        -> WorkflowOutput
                    #8, #9 -> Zip
                    -> InputMapping(Selector=Item1, Index(Selector=Item1))
                    -> SelectMany ShuffledILDValue => #12
                        SubscribeSubject ShuffledILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=0))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4, #12 -> Merge
                    -> MulticastSubject ILD
                    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=3, PrintSubjectName=PrintCode)
                    -> Divide(Operand=DoubleProperty(Value=2))
                    -> WorkflowOutput
                #2, #3 -> Zip => #4
                -> Subtract
                -> MulticastSubject LeftIntensity => #6
                #4 -> Add
                -> MulticastSubject RightIntensity => #8
                #6, #8 -> Zip
                -> BooleanProperty(Value=false) => #10
                #0 -> Condition "RepeatTrial != 0"
                    SubscribeSubject RepeatTrial
                    -> WorkflowOutput
                -> BooleanProperty(Value=false)
                -> MulticastSubject RepeatTrial => #13
                #10, #13 -> Merge
                -> WorkflowOutput
            -> IntProperty(Value=0)
            -> GroupWorkflow LeftOrRight
                WorkflowInput Source1 => #0
                SubscribeSubject RightIntensity => #1
                SubscribeSubject LeftIntensity => #2
                #1, #2 -> CombineLatest
                -> Subtract => #4
                -> Bonsai.Scripting.Expressions.ExpressionCondition "it >=0"
                  Expression: it >= 0
                -> IntProperty(Value=1) => #6
                #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "it < 0"
                  Expression: it < 0
                -> IntProperty(Value=-1) => #8
                #6, #8 -> Merge => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject LeftOrRight
                -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=4, PrintSubjectName=PrintCode)
                -> WorkflowOutput
            -> WorkflowOutput

        SubscribeSubject RequestNewTrial => #19
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #21
        #19, #21 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample => #24
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0.3
        -> IntProperty(Value=0) => #26
        #24 -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=0.3)) => #1
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Optogenetics.UseOpto) => #3
            #1, #3 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> IntProperty(Value=1) => #28
        #26, #28 -> Merge
        -> MulticastSubject OptoTrial

        SubscribeSubject BaseSoundOnset => #31
        SubscribeSubject RequestNewTrial => #32
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.SoundExpMean)
        -> Bonsai.Dsp.Pow(Power=-1) => #35
        SubscribeSubject Random => #36
        #35, #36 -> WithLatestFrom
        -> InputMapping(Selector=Item2, TypeMapping=TypeMapping<System.Random>, Rate(Selector=Item1))
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=INF) => #39
        #32, #39 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #41
        -> Condition RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.SoundExpMean)
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #43
        #41 -> Condition !RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.SoundExpMean)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #45
        #43, #45 -> Merge => #46
        #31, #46 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedSoundOnset

        SubscribeSubject BaseOptoOnset => #50
        SubscribeSubject RequestNewTrial => #51
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.OptoExpMean)
        -> Bonsai.Dsp.Pow(Power=-1) => #54
        SubscribeSubject Random => #55
        #54, #55 -> WithLatestFrom
        -> InputMapping(Selector=Item2, TypeMapping=TypeMapping<System.Random>, Rate(Selector=Item1))
        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=INF) => #58
        #51, #58 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #60
        -> Condition RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.OptoExpMean)
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #62
        #60 -> Condition !RandomizeFT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=FixationTime.OptoExpMean)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #64
        #62, #64 -> Merge => #65
        #50, #65 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedOptoOnset

    GroupWorkflow GenerateILDArray
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Sound.Ild)
        -> InputMapping(Selector=it, NumSteps(Selector=NumSteps), StepSize(Selector=StepSize), UseLog(Selector=UseLog), LogBase(Selector=LogBase))
        -> Extensions.GenerateILDArray(NumSteps=1, StepSize=50, UseLog=false, LogBase=2)
        -> MulticastSubject ILDs

    GroupWorkflow ShuffleILDArray
        SubscribeSubject NewILDShuffle => #0
        SubscribeSubject ILDs => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Extensions.ShuffleArray
        -> MulticastSubject ShuffledILDs

    GroupWorkflow WaterDelivery
        GroupWorkflow RewardButtonsLogic
            SubscribeSubject RewardLeftButton
            -> IntProperty(Value=-1) => #1
            SubscribeSubject RewardRightButton
            -> IntProperty(Value=1) => #3
            #1, #3 -> Merge
            -> MulticastSubject WaterDelivery
            -> WorkflowOutput

        SubscribeSubject WaterDelivery => #1
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #2
          Expression: it == -1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=12, PrintSubjectName=PrintCode) => #8
        SubscribeSubject LeftRewardSteps
        -> Multiply(Operand=IntProperty(Value=10)) => #10
        #8, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.009S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands
        #2 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
        -> MulticastSubject BehaviorCommands
        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition => #21
          Expression: it == 1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject RightPumpCommands
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=13, PrintSubjectName=PrintCode) => #27
        SubscribeSubject RightRewardSteps
        -> Multiply(Operand=IntProperty(Value=10)) => #29
        #27, #29 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it)) => #33
        Source2=#33 -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.009S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands
        #21 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow GetPenaltyTime
        SubscribeSubject Outcome => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
          Expression: it == 2
        DoubleProperty(Value=0) => #2
        #1, #2 -> WithLatestFrom => #3
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
          Expression: it == 1
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Incorrect) => #6
        #4, #6 -> WithLatestFrom => #7
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #8
          Expression: it == -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.FixationAbort) => #10
        #8, #10 -> WithLatestFrom => #11
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
          Expression: it < 0 && it != -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Abort) => #14
        #12, #14 -> WithLatestFrom => #15
        #3, #7, #11, #15 -> Merge
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject Penalty
        -> WorkflowOutput

    GroupWorkflow AutobiasCorrection
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject HitHistory

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject PreviousSides

        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
          Expression: it > 0
        SubscribeSubject LeftOrRight => #12
        #11, #12 -> WithLatestFrom
        -> Condition => #14
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 2
        -> SelectMany "Add Element" => #17
            SubscribeSubject HitHistory
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #19
            SubscribeSubject HitHistory
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject HitHistory
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #17 -> Condition => #20
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #19, #20 -> Merge
        -> MulticastSubject HitHistory => #22
        #14 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == -1
        -> SelectMany "Add Element" => #25
            SubscribeSubject PreviousSides
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #27
            SubscribeSubject PreviousSides
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject PreviousSides
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #25 -> Condition => #28
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #27, #28 -> Merge
        -> MulticastSubject PreviousSides => #30
        #22, #30 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=Length)
            -> Equal(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> Antibias(BiasThreshold=0.12) => #33
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject LeftMultiplier
        #33 -> MemberSelector(Selector=Item2)
        -> MulticastSubject RightMultiplier

    GroupWorkflow PlaySound
        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject StartSound

        IntProperty(Value=0)
        -> BehaviorSubject StopSound

        SubscribeSubject StartSound
        -> SelectMany
            SubscribeSubject StopSound
            -> Skip(Count=1)
            -> Take(Count=1)
            -> WorkflowOutput

            Timer(DueTime=PT0S, Period=PT9.5S)
            -> MulticastSubject PlaySound
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=31))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow Distributions
        SubscribeSubject Random => #0
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Sounds.Count)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #4
        #0, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
        -> BehaviorSubject SoundChoiceDistribution

    GroupWorkflow UpdateSubjects
        GroupWorkflow RepeatTrial
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> BooleanProperty(Value=false)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #5
              Expression: it == 1
            SubscribeSubject RepeatErrors => #6
            #5, #6 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
              Expression: it < 0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=TrialRepetition.RepeatAborts) => #13
            #11, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject RepeatTrial

        GroupWorkflow TrialsAborted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it < 0
            SubscribeSubject TrialsAborted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject TrialsAborted
            -> WorkflowOutput

        GroupWorkflow RightAnswers
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it == 2
            SubscribeSubject RightAnswers => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject RightAnswers
            -> WorkflowOutput

        GroupWorkflow TrialsCompleted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject TrialsCompleted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialsCompleted
            -> WorkflowOutput

        GroupWorkflow BlockAbortRatio
            SubscribeSubject TrialsAborted => #0
            SubscribeSubject BlockTrial => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput

        GroupWorkflow BlockPerformance
            SubscribeSubject RightAnswers => #0
            SubscribeSubject TrialsCompleted => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockPerformance
            -> WorkflowOutput

        GroupWorkflow BaseOptoOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseOptoOnset => #2
            SubscribeSubject OptoOnsetDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject OptoOnsetTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject OptoOnsetTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject OptoOnsetTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseOptoOnset
            -> WorkflowOutput

        GroupWorkflow BaseSoundOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseSoundOnset => #2
            SubscribeSubject SoundOnsetDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject SoundOnsetTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject SoundOnsetTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject SoundOnsetTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseSoundOnset
            -> WorkflowOutput

        GroupWorkflow BaseRT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseRT => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=ReactionTime.Delta) => #4
            #2, #4 -> CombineLatest => #5
            #1, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #8
            -> Condition "BaseRT <= RTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Target) => #2
                #0, #2 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #8 -> Condition "BaseRT > RTTarget" => #10
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Target) => #2
                #0, #2 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=ReactionTime.Target) => #12
            #10, #12 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #14
            #9, #14 -> Merge
            -> MulticastSubject BaseRT
            -> WorkflowOutput

        GroupWorkflow IntendedLNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject IntendedLNP => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=LnpTime.Delta) => #4
            #2, #4 -> CombineLatest => #5
            #1, #5 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #8
            -> Condition "IntendedLNP <= LNPTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Target) => #2
                #0, #2 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #8 -> Condition "IntendedLNP > LNPTarget" => #10
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Target) => #2
                #0, #2 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=LnpTime.Target) => #12
            #10, #12 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #14
            #9, #14 -> Merge
            -> MulticastSubject IntendedLNP
            -> WorkflowOutput

        GroupWorkflow PrepareNewTrial
            SubscribeSubject Outcome
            -> BooleanProperty(Value=true)
            -> MulticastSubject PrepareNewTrial
            -> WorkflowOutput

        GroupWorkflow TimedFT
            SubscribeSubject TimedOptoOnset => #0
            SubscribeSubject TimedSoundOnset => #1
            #0, #1 -> CombineLatest
            -> Add
            -> MulticastSubject TimedFT
            -> WorkflowOutput

GroupWorkflow Hardware
    Disable GroupWorkflow Logging
        SubscribeSubject BehaviorMessages => #0
        SubscribeSubject SoundCardMessages => #1
        SubscribeSubject LeftPumpMessages => #2
        SubscribeSubject RightPumpMessages => #3
        SubscribeSubject CDMessages => #4
        #0, #1, #2, #3, #4 -> Merge => #5
        SubscribeSubject OutputFolderPath => #6
        StringProperty(Value=events.bin) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Harp.MessageWriter(FileName=./output/Rat000/241212/events.bin, Suffix=FileCount, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #11
        SubscribeSubject OutputFilePath => #12
        #11, #12 -> SubscribeWhen

    GroupWorkflow Camera
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
        -> MemberSelector(Selector=Image)
        -> PublishSubject Camera => #2
        Disable SubscribeSubject OutputFolderPath => #3
        Disable StringProperty(Value=video_.avi) => #4
        #3, #4 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> Disable PropertyMapping(FileName) => #7
        #2, #7 -> Bonsai.Vision.VideoWriter => #8
          FileName="D:\Bonsai Videos\video_.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=100
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        IntProperty(Value=0)
        -> IgnoreElements => #10
        #8, #10 -> SubscribeWhen
        -> Disable SubscribeWhen
        #0 -> MemberSelector(Selector="Metadata.embeddedGPIOPinState,Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedShutter") => #13
        Disable SubscribeSubject OutputFolderPath => #14
        Disable StringProperty(Value=cam_metadata_.csv) => #15
        #14, #15 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> Disable PropertyMapping(FileName) => #18
        #13, #18 -> Bonsai.IO.CsvWriter(FileName="D:\Bonsai Videos\cam_metadata_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #19
        IntProperty(Value=0)
        -> IgnoreElements => #21
        #19, #21 -> SubscribeWhen => #22
        Disable SubscribeSubject OutputFilePath => #23
        #22, #23 -> Disable SubscribeWhen

    ExternalizedMapping(PortName(DisplayName=BehaviorPortName))
    -> GroupWorkflow Behavior
        GroupWorkflow InitializeSubjects
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> IgnoreElements
            -> BehaviorSubject BehaviorCommands

            BooleanProperty(Value=false) => #3
            DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> BehaviorSubject LeftPoke
            -> BehaviorSubject CenterPoke
            -> BehaviorSubject RightPoke

        SubscribeSubject BehaviorCommands => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject BehaviorMessages

        SubscribeSubject BehaviorMessages => #5
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp
        #5 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #9
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LeftPoke
        #9 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject CenterPoke
        #9 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject RightPoke

        Disable Annotation LeftRewardPulseConfig(Text="") => #16
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO1))
        -> Disable MulticastSubject BehaviorCommands
        #16 -> Disable SubscribeSubject RewardOpenL
        -> Disable PropertyMapping(PulseDO1)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=79))
        -> Disable MulticastSubject BehaviorCommands

        Disable Annotation RightRewardPulseConfig(Text="") => #23
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2))
        -> Disable MulticastSubject BehaviorCommands
        #23 -> Disable SubscribeSubject RewardOpenR
        -> Disable PropertyMapping(PulseDO2)
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=99))
        -> Disable MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10))
        -> MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10))
        -> MulticastSubject BehaviorCommands

    ExternalizedMapping(PortName(DisplayName=SoundCardPortName))
    -> GroupWorkflow SoundCard
        SubscribeSubject SoundCardCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM17)
        -> PublishSubject SoundCardMessages

        SubscribeSubject PlaySound => #4
        SubscribeSubject SoundIndex
        -> PropertyMapping(PlaySoundOrFrequency) => #6
        #4, #6 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject LeftIntensity => #9
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftSlope) => #11
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftIntercept) => #13
        #11, #13 -> Zip => #14
        #9, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject LeftAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeft(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=76))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject RightIntensity => #22
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightSlope) => #24
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightIntercept) => #26
        #24, #26 -> Zip => #27
        #22, #27 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject RightAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRight(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=577))
        -> MulticastSubject SoundCardCommands

    ExternalizedMapping(PortName(DisplayName=CurrentDriverPortName))
    -> GroupWorkflow CurrentDriver
        GroupWorkflow "OptoProtocol (WIP)"
            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject StartOpto

            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject EndOpto

            Disable IntProperty(Value=0)
            -> Disable SelectMany RampIn
                WorkflowInput Source1
                -> WorkflowOutput

                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #3
                ExternalizedMapping(Value(DisplayName=Intensity)) => #4
                -> IntProperty(Value=0) => #5
                #3, #5 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #10
                #4 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #13
                #10, #13 -> Take(Count=53)
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands
            -> Disable Delay(DueTime=PT0S)
            -> Disable SelectMany RampOut
                WorkflowInput Source1
                -> WorkflowOutput

                IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #4
                ExternalizedMapping(Value(DisplayName=Intensity)) => #5
                -> IntProperty(Value=0) => #6
                #4, #6 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #11
                #5 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #14
                #11, #14 -> Take(Count=53) => #15
                #2, #15 -> CombineLatest
                -> Subtract
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands

            SubscribeSubject StartOpto => #10
            -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.UsePulses) => #1
                SubscribeSubject OptoTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany Pulses
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT4S, Period=PT0S) => #4
                DoubleProperty(Value=1) => #5
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Frequency) => #7
                #5, #7 -> CombineLatest
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.05S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> MulticastSubject CDCommands => #14
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.PulseDuration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
                  Expression: TimeSpan.FromMilliseconds(it)
                -> PropertyMapping(DueTime) => #18
                #14, #18 -> Delay(DueTime=PT0.02S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands => #21
                #4, #21 -> WithLatestFrom
                -> Take(Count=1)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> Take(Count=1)
                -> WorkflowOutput
            #10 -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.UsePulses)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                SubscribeSubject OptoTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> GroupWorkflow Continuous
                WorkflowInput Source1 => #0
                ExternalizedMapping(Dac0Voltage) => #1
                #0, #1 -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> BehaviorSubject CDCommands => #3
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Delay(DueTime=PT1S)
                -> IntProperty(Value=0)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> WorkflowOutput

            SubscribeSubject EndOpto
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
            -> MulticastSubject CDCommands

        SubscribeSubject CDCommands => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.CurrentDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject CDMessages => #4
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Optogenetics.UseOpto)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
          Expression: it
        #4, #7 -> SubscribeWhen

    ExternalizedMapping(PortName(DisplayName=LeftSyringePumpPortName))
    -> GroupWorkflow LeftSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject LeftMultiplier

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> BehaviorSubject LeftPumpCommands

        SubscribeSubject LeftPumpCommands => #4
        ExternalizedMapping(PortName) => #5
        #4, #5 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject LeftPumpMessages => #7
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #10
          Expression: it
        #7, #10 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #12
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #14
        SubscribeSubject LeftMultiplier => #15
        #14, #15 -> CombineLatest
        -> Multiply => #17
        SubscribeSubject SetupConfig => #18
        -> MemberSelector(Selector=SyringePumps.LeftSlope) => #19
        #18 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #20
        #17, #19, #20 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> BehaviorSubject LeftRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #25
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #26
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #27
        #12, #25, #26, #27 -> Merge
        -> MulticastSubject LeftPumpCommands => #29
        SubscribeSubject LeftPumpMessages => #30
        #29, #30 -> SubscribeWhen

    ExternalizedMapping(PortName(DisplayName=RightSyringePumpPortName))
    -> GroupWorkflow RightSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject RightMultiplier

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> BehaviorSubject RightPumpCommands

        SubscribeSubject RightPumpCommands => #4
        ExternalizedMapping(PortName) => #5
        #4, #5 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
        -> PublishSubject RightPumpMessages => #7
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #10
          Expression: it
        #7, #10 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #12
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #14
        SubscribeSubject RightMultiplier => #15
        #14, #15 -> CombineLatest
        -> Multiply => #17
        SubscribeSubject SetupConfig => #18
        -> MemberSelector(Selector=SyringePumps.RightSlope) => #19
        #18 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #20
        #17, #19, #20 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> BehaviorSubject RightRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #25
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #26
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #27
        #12, #25, #26, #27 -> Merge
        -> MulticastSubject RightPumpCommands => #29
        SubscribeSubject RightPumpMessages => #30
        #29, #30 -> SubscribeWhen

GroupWorkflow FileIO
    GroupWorkflow Input
        Bonsai.IO.ReadAllText(Path=config\animal.yml)
        -> Animal.DeserializeFromYaml(Type=TypeMapping<Animal.Animal>)
        -> AsyncSubject AnimalConfig

        Bonsai.IO.ReadAllText(Path=config\training-test.json)
        -> Training.DeserializeFromJson(Type=TypeMapping<Training.Training>)
        -> AsyncSubject TrainingConfig

        Bonsai.IO.ReadAllText(Path=config\setup-test.json)
        -> SetupList.DeserializeFromJson(Type=TypeMapping<SetupList.SetupList>)
        -> MemberSelector(Selector=Setups) => #8
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.SetupId) => #10
        #8, #10 -> Zip
        -> InputMapping(Selector=Item1, Value(Selector=Item2))
        -> Index(Operand=IntProperty(Value=0))
        -> Take(Count=1)
        -> AsyncSubject SetupConfig

        Bonsai.IO.ReadAllText(Path=config\prints.json)
        -> PrintDict.DeserializeFromJson(Type=TypeMapping<PrintDict.PrintDict>)
        -> AsyncSubject Prints

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.StartingTrainingLevel)
        -> BehaviorSubject TrainingLevel

        SubscribeSubject TrainingLevel
        -> Subtract(Operand=IntProperty(Value=1)) => #23
        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=Levels) => #25
        #23, #25 -> WithLatestFrom
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=0))
        -> BehaviorSubject LevelConfig

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialRepetition.RepeatErrors)
        -> BehaviorSubject RepeatErrors

    GroupWorkflow Output
        SubscribeSubject SaveTrial => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId)
        -> PropertyMapping(AnimalId) => #3
        SubscribeSubject Trial => #4
        SubscribeSubject TrialStart => #5
        SubscribeSubject TrialEnd => #6
        SubscribeSubject TrialEnd => #7
        SubscribeSubject TrialStart => #8
        #7, #8 -> CombineLatest
        -> Subtract => #10
        #4, #5, #6, #10 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), StartTime(Selector=Item2), EndTime(Selector=Item3), Duration(Selector=Item4))
        -> Output.Trial(Number=11, StartTime=115.088, EndTime=114.070976, Duration=-1.0170239999999922)
        -> PropertyMapping(Trial) => #14
        SubscribeSubject Block => #15
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=LevelId) => #17
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialsPerBlock) => #19
        #15, #17, #19 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), TrainingLevel(Selector=Item2), TrialsPerBlock(Selector=Item3))
        -> Output.Block(Number=1, TrainingLevel=1, TrialsPerBlock=200)
        -> PropertyMapping(Block) => #23
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Number) => #25
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Type) => #27
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.SetupId) => #29
        #25, #27, #29 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), Type(Selector=Item2), SetupId(Selector=Item3))
        -> Output.Session(Number=1, Type=1, SetupId=0)
        -> PropertyMapping(Session) => #33
        SubscribeSubject ABL => #34
        SubscribeSubject ILD => #35
        SubscribeSubject SoundIndex => #36
        SubscribeSubject LeftAmp => #37
        SubscribeSubject RightAmp => #38
        #34, #35, #36, #37, #38 -> CombineLatest
        -> InputMapping
          Selector=it
          Abl(Selector=Item1)
          Ild(Selector=Item2)
          SoundIndex(Selector=Item3)
          LeftAmplification(Selector=Item4)
          RightAmplification(Selector=Item5)
        -> Output.Sound(Abl=25, Ild=-50, SoundIndex=2, LeftAmplification=7.67056145390481, RightAmplification=57.792644614534616)
        -> PropertyMapping(Sound) => #42
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.Value) => #44
        SubscribeSubject ITIStart => #45
        SubscribeSubject ITIEnd => #46
        SubscribeSubject ITIEnd => #47
        SubscribeSubject ITIStart => #48
        #47, #48 -> CombineLatest
        -> Subtract => #50
        #44, #45, #46, #50 -> CombineLatest
        -> InputMapping(Selector=it, IntendedDuration(Selector=Item1), StartTime(Selector=Item2), EndTime(Selector=Item3), TimedDuration(Selector=Item4))
        -> Output.ITI(IntendedDuration=1, StartTime=17347.340992, EndTime=17348.348992, TimedDuration=1.0079999999979918)
        -> PropertyMapping(Iti) => #54
        SubscribeSubject TimeToCNP => #55
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait) => #57
        #55, #57 -> CombineLatest
        -> InputMapping(Selector=it, TimedValue(Selector=Item1), MaxDuration(Selector=Item2))
        -> Output.TimeToCnp(TimedValue=0, MaxDuration=180)
        -> PropertyMapping(TimeToCnp) => #61
        SubscribeSubject BaseOptoOnset => #62
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.OptoExpMean) => #64
        SubscribeSubject IntendedOptoOnset => #65
        SubscribeSubject TimedOptoOnset => #66
        #62, #64, #65, #66 -> CombineLatest
        -> InputMapping(Selector=it, BaseTime(Selector=Item1), ExpMean(Selector=Item2), IntendedDuration(Selector=Item3), TimedDuration(Selector=Item4))
        -> Output.FixationTimeParts(BaseTime=5, ExpMean=0, IntendedDuration=5, TimedDuration=0) => #69
        SubscribeSubject BaseSoundOnset => #70
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FixationTime.SoundExpMean) => #72
        SubscribeSubject IntendedSoundOnset => #73
        SubscribeSubject TimedSoundOnset => #74
        #70, #72, #73, #74 -> CombineLatest
        -> InputMapping(Selector=it, BaseTime(Selector=Item1), ExpMean(Selector=Item2), IntendedDuration(Selector=Item3), TimedDuration(Selector=Item4))
        -> Output.FixationTimeParts(BaseTime=5, ExpMean=0, IntendedDuration=5, TimedDuration=0) => #77
        #69, #77 -> CombineLatest
        -> InputMapping(Selector=it, OptoOnsetTime(Selector=Item1), SoundOnsetTime(Selector=Item2))
        -> Output.FixationTime
        -> PropertyMapping(FixationTime) => #81
        SubscribeSubject BaseRT => #82
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxReactionTime) => #84
        SubscribeSubject TimedRT => #85
        #82, #84, #85 -> CombineLatest
        -> InputMapping(Selector=it, BaseTime(Selector=Item1), MaxDuration(Selector=Item2), TimedDuration(Selector=Item3))
        -> Output.ReactionTime(BaseTime=0.01, MaxDuration=10, TimedDuration=0)
        -> PropertyMapping(ReactionTime) => #89
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt) => #91
        SubscribeSubject TimedMT => #92
        #91, #92 -> CombineLatest
        -> InputMapping(Selector=it, MaxDuration(Selector=Item1), TimedDuration(Selector=Item2))
        -> Output.MovementTime(MaxDuration=180, TimedDuration=0)
        -> PropertyMapping(MovementTime) => #96
        SubscribeSubject IntendedLNP => #97
        SubscribeSubject TimedLNP => #98
        #97, #98 -> CombineLatest
        -> InputMapping(Selector=it, IntendedDuration(Selector=Item1), TimedDuration(Selector=Item2))
        -> Output.LnpTime(IntendedDuration=0.01, TimedDuration=0)
        -> PropertyMapping(LnpTime) => #102
        SubscribeSubject ResponsePoke => #103
        SubscribeSubject Outcome => #104
        SubscribeSubject BlockPerformance => #105
        SubscribeSubject BlockAbortRatio => #106
        #103, #104, #105, #106 -> CombineLatest
        -> InputMapping(Selector=it, ResponsePoke(Selector=Item1), Value(Selector=Item2), BlockPerformance(Selector=Item3), BlockAbortRatio(Selector=Item4))
        -> Output.Outcome(ResponsePoke=1, Value=2, BlockPerformance=0.55555555555555558, BlockAbortRatio=0)
        -> PropertyMapping(Outcome) => #110
        SubscribeSubject RepeatTrial
        -> PropertyMapping(RepeatedTrial) => #112
        BooleanProperty(Value=false) => #113
        DoubleProperty(Value=0) => #114
        DoubleProperty(Value=0) => #115
        DoubleProperty(Value=0) => #116
        #113, #114, #115, #116 -> CombineLatest
        -> InputMapping(Selector=it, OptoTrial(Selector=Item1), Duration(Selector=Item2), LeftPower(Selector=Item3), RightPower(Selector=Item4))
        -> Output.Optogenetics(OptoTrial=false, Duration=0, LeftPower=0, RightPower=0)
        -> PropertyMapping(Optogenetics) => #120
        #0, #3, #14, #23, #33, #42, #54, #61, #81, #89, #96, #102, #110, #112, #120 -> Output.Output(AnimalId=1, RepeatedTrial=false)
        -> Output.SerializeToJson
        -> JsonWriter(Path=output\out.json, Suffix=FileCount, Overwrite=false)

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingBlockNumber)
    -> MulticastSubject Block

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingTrialNumber)
    -> MulticastSubject Trial

    SubscribeSubject AnimalConfig => #8
    -> MemberSelector(Selector=FixationTime.OptoOnsetTime.MinValue)
    -> MulticastSubject BaseOptoOnset
    #8 -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Delta)
    -> MulticastSubject OptoOnsetDelta
    #8 -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Target)
    -> MulticastSubject OptoOnsetTarget

    SubscribeSubject AnimalConfig => #15
    -> MemberSelector(Selector=FixationTime.SoundOnsetTime.MinValue)
    -> MulticastSubject BaseSoundOnset
    #15 -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Delta)
    -> MulticastSubject SoundOnsetDelta
    #15 -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Target)
    -> MulticastSubject SoundOnsetTarget

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=ReactionTime.MinValue)
    -> MulticastSubject BaseRT

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=LnpTime.MinValue)
    -> MulticastSubject IntendedLNP

GroupWorkflow SubjectInitialization
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    BooleanProperty(Value=false)
    -> BehaviorSubject RepeatTrial

    Disable BooleanProperty(Value=false)
    -> Disable IgnoreElements
    -> Disable BehaviorSubject PlotsMessage

    Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
    -> IgnoreElements
    -> BehaviorSubject SoundCardCommands

    StringProperty
    -> IgnoreElements
    -> BehaviorSubject PrintCode
    -> BehaviorSubject Print

    DoubleProperty(Value=0)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject ShuffledILDs
    -> BehaviorSubject ILDs

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject TrialEnd
    -> BehaviorSubject TrialStart
    -> BehaviorSubject LNPStart
    -> BehaviorSubject SaveTrial

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject WaterDelivery
    -> BehaviorSubject Outcome
    -> BehaviorSubject LeftOrRight
    -> Disable BehaviorSubject BeginningMessage
    -> BehaviorSubject PlaySound

    BooleanProperty(Value=true)
    -> BehaviorSubject PrepareNewTrial

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject RequestNewTrial

    IntProperty(Value=0)
    -> BehaviorSubject Block
    -> BehaviorSubject Trial
    -> BehaviorSubject ResponsePoke
    -> BehaviorSubject WaveformL
    -> BehaviorSubject WaveformR
    -> BehaviorSubject BlockTrial
    -> BehaviorSubject SoundIndex
    -> BehaviorSubject LeftIntensity
    -> BehaviorSubject RightIntensity
    -> Disable BehaviorSubject BlockMessage

    DoubleProperty(Value=0)
    -> BehaviorSubject BaseOptoOnset
    -> BehaviorSubject OptoOnsetDelta
    -> BehaviorSubject OptoOnsetTarget
    -> BehaviorSubject BaseSoundOnset
    -> BehaviorSubject SoundOnsetDelta
    -> BehaviorSubject SoundOnsetTarget
    -> BehaviorSubject BaseRT
    -> BehaviorSubject IntendedLNP
    -> BehaviorSubject TimedFT
    -> BehaviorSubject LEDPowerR
    -> BehaviorSubject LEDPowerL
    -> BehaviorSubject TimedLED
    -> BehaviorSubject OptoTrial
    -> BehaviorSubject BlockAbortRatio
    -> BehaviorSubject BlockPerformance
    -> BehaviorSubject TimedLNP
    -> BehaviorSubject TimedMT
    -> BehaviorSubject TimedRT
    -> BehaviorSubject TimedOptoOnset
    -> BehaviorSubject TimeToCNP
    -> BehaviorSubject IntendedSoundOnset
    -> BehaviorSubject TimedSoundOnset
    -> BehaviorSubject IntendedOptoOnset
    -> BehaviorSubject LeftAmp
    -> BehaviorSubject RightAmp
    -> BehaviorSubject ABL
    -> BehaviorSubject ILD
    -> BehaviorSubject Penalty
    -> BehaviorSubject LEDStart
    -> BehaviorSubject NewILDShuffle
    -> BehaviorSubject RightAnswers
    -> BehaviorSubject TrialsAborted
    -> BehaviorSubject TrialsCompleted
    -> BehaviorSubject ILDIndex
    -> BehaviorSubject ITIStart
    -> BehaviorSubject ITIEnd

Disable GroupWorkflow PythonCommunication
    GroupWorkflow MessagesSent
        Bonsai.Osc.CreateUdpClient(Name=UdpClient, Port=0, RemoteHostName=localhost, RemotePort=2)

        GroupWorkflow PlotMessage
            SubscribeSubject PlotsMessage => #0
            SubscribeSubject Outcome => #1
            SubscribeSubject TimeToCNP => #2
            SubscribeSubject TimedRT => #3
            SubscribeSubject TimedMT => #4
            SubscribeSubject BlockPerformance => #5
            SubscribeSubject BlockAbortRatio => #6
            SubscribeSubject TrialsCompleted => #7
            #1, #2, #3, #4, #5, #6, #7 -> CombineLatest => #8
            #0, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/plots)
            -> WorkflowOutput

        GroupWorkflow NewTrialMessage
            SubscribeSubject BeginningMessage => #0
            SubscribeSubject BlockTrial => #1
            SubscribeSubject ILD => #2
            SubscribeSubject ABL => #3
            SubscribeSubject IntendedSoundOnset => #4
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Iti.Value) => #6
            #1, #2, #3, #4, #6 -> CombineLatest => #7
            #0, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/beginning)
            -> WorkflowOutput

        GroupWorkflow BlockMessage
            SubscribeSubject BlockMessage => #0
            SubscribeSubject ILDs => #1
            #0, #1 -> SubscribeWhen => #2
            #2, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            -> MemberSelector(Selector=Length)
            -> Add(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #7
            #4, #7 -> SelectMany
                Timer(DueTime=PT0S, Period=PT0.001S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
                  Expression: Convert.ToInt32(it)
                WorkflowInput Source1
                -> SelectMany => #3
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Length)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: Convert.ToDouble(it)
                    #0 -> Concat => #3
                    #2, #3 -> Merge
                    -> WorkflowOutput
                #1, #3 -> Zip => #4
                ExternalizedMapping(Count) => #5
                #4, #5 -> Take(Count=3) => #6
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Item1 != 0
                -> Delay(DueTime=PT1S) => #8
                #6 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                  Expression: Item1 == 0
                #8, #9 -> Merge
                -> WorkflowOutput
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/block)
            -> WorkflowOutput

        SubscribeSubject RepeatErrors
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/repeaterrors)

    GroupWorkflow MessagesReceived
        Bonsai.Osc.CreateUdpClient(Name=UdpServer, Port=1, RemoteHostName=localhost, RemotePort=0)

        Bonsai.Osc.ReceiveMessage(Address=/reward, TypeTag=i, Connection=UdpServer)
        -> MulticastSubject WaterDelivery

        Bonsai.Osc.ReceiveMessage(Address=/repeat, TypeTag=i, Connection=UdpServer) => #3
        SubscribeSubject RepeatErrors => #4
        #3, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !it
        -> MulticastSubject RepeatErrors

GroupWorkflow GUI
    GroupWorkflow Prints
        GroupWorkflow NewTrial
            StringProperty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=new_trial) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow ITI
            SubscribeSubject ITIEnd => #0
            SubscribeSubject ITIStart => #1
            #0, #1 -> CombineLatest
            -> Subtract => #3
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=iti) => #5
            -> PropertyMapping(PrintCode) => #6
            #3, #6 -> GroupWorkflow TextToPrint => #7
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #5 -> PropertyMapping(PrintCode) => #8
            #7, #8 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CorrectSide
            SubscribeSubject LeftOrRight => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=correct_side) => #7
            -> PropertyMapping(PrintCode) => #8
            #5, #8 -> GroupWorkflow TextToPrint => #9
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #7 -> PropertyMapping(PrintCode) => #10
            #9, #10 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StartTrial
            StringProperty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=start_trial) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Fixation
            StringProperty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=fixation) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow FixationTime
            SubscribeSubject TimedFT => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=fixation_time) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StimulusPresentation
            StringProperty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=stimulus_presentation) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow MovementTime
            StringProperty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=movement_time) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> StringProperty(Value="Right answer") => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value="Wrong answer") => #5
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value="CNP Abort") => #8
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> StringProperty(Value="Fixation Abort") => #11
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> StringProperty(Value="RT Abort") => #14
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> StringProperty(Value="MT+ Abort") => #17
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> StringProperty(Value="MT- Abort") => #20
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> StringProperty(Value="LNP Abort") => #23
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> StringProperty(Value="IO crash") => #26
            #2, #5, #8, #11, #14, #17, #20, #23, #26 -> Merge => #27
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=outcome) => #29
            -> PropertyMapping(PrintCode) => #30
            #27, #30 -> GroupWorkflow TextToPrint => #31
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #29 -> PropertyMapping(PrintCode) => #32
            #31, #32 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow PenaltyTime
            SubscribeSubject Penalty => #0
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=penalty_time) => #2
            -> PropertyMapping(PrintCode) => #3
            #0, #3 -> GroupWorkflow TextToPrint => #4
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #2 -> PropertyMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            SubscribeSubject WaterDelivery => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(Value(DisplayName=PrintCode))
            -> StringProperty(Value=reward_delivery) => #7
            -> PropertyMapping(PrintCode) => #8
            #5, #8 -> GroupWorkflow TextToPrint => #9
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value="")) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            #7 -> PropertyMapping(PrintCode) => #10
            #9, #10 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

    Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=Hello)
    -> VisualizerMapping => #2
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #5
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #8
    SubscribeSubject Camera
    -> VisualizerMapping => #10
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #13
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #16
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #19
    SubscribeSubject Print
    -> VisualizerMapping => #21
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #24
    Bonsai.Vision.CreatePoint(X=0, Y=0)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #27
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text="Next Trial Left")
    -> VisualizerMapping => #29
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text="Next Trial Right")
    -> VisualizerMapping => #31
    Bonsai.Gui.ButtonBuilder RewardLeftButton(Enabled=true, Visible=true, Text="Reward Left")
    -> PublishSubject RewardLeftButton
    -> VisualizerMapping => #34
    Bonsai.Gui.ButtonBuilder RewardRightButton(Enabled=true, Visible=true, Text="Reward Right")
    -> PublishSubject RewardRightButton
    -> VisualizerMapping => #37
    Bonsai.Gui.ToggleButtonBuilder(Enabled=true, Visible=true, Text="Repeat Errors", Checked=false)
    -> VisualizerMapping => #39
    Bonsai.Gui.ButtonBuilder EndSessionButton(Enabled=true, Visible=true, Text="End Session")
    -> PublishSubject EndSessionButton
    -> VisualizerMapping => #42
    #29, #31, #34, #37, #39, #42 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #44
    #2, #5, #8, #10, #13, #16, #19, #21, #24, #27, #44 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=4
      RowCount=3
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> WorkflowOutput

BooleanProperty(Value=true)
-> SelectMany Inter-TrialInterval => #7
    GroupWorkflow BoxLEDOn
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Cues.ItiLight) => #1
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
        -> MulticastSubject BehaviorCommands => #4
        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands => #7
        #4, #7 -> Merge
        -> WorkflowOutput

    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=0, PrintSubjectName=PrintCode) => #2
    -> GroupWorkflow ITI
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIStart => #3
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        #3, #7 -> Delay(DueTime=PT1S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIEnd
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=1, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    -> IntProperty(Value=0) => #4
    GroupWorkflow ITIReset
        SubscribeSubject CenterPoke
        -> Condition IsPokingCNP(Description="Triggers if the animal is poking the central nose poke and if  ITIReset setting is equal to 1 (not equal to 0)")
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Iti.CanReset) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> WorkflowOutput
    -> IntProperty(Value=1) => #6
    #4, #6 -> Merge => #7
    #2 -> GroupWorkflow NewTrialPreparations => #8
        WorkflowInput Source1 => #0
        -> Condition
            SubscribeSubject PrepareNewTrial
            -> WorkflowOutput
        -> MulticastSubject RequestNewTrial
        -> BooleanProperty(Value=false)
        -> MulticastSubject PrepareNewTrial => #4
        #0 -> Condition => #5
            SubscribeSubject PrepareNewTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #4, #5 -> Merge
        -> WorkflowOutput
    #7, #8 -> Zip
    -> MemberSelector(Selector=Item1) => #10
    Source2=#10 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany StartTrial => #9
    GroupWorkflow LEDs
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Cues.PokeLight)
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands

    IntProperty(Value=0) => #1
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=5, PrintSubjectName=PrintCode)
    -> GroupWorkflow PokeDetection => #4
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #2
        -> WorkflowOutput
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject TrialStart => #7
        #2, #7 -> Zip
        -> Subtract
        -> MulticastSubject TimeToCNP
    #1, #4 -> Zip
    -> MemberSelector(Selector=Item1) => #6
    GroupWorkflow MaxWait
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-1) => #10
    #6, #10 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany FixationTime => #11
    GroupWorkflow PokeLEDBlink
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Lights.PokePeriod)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT1S)
        -> Condition
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Cues.FixationLight)
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands => #7
        SubscribeSubject SetupConfig => #8
        -> MemberSelector(Selector=Lights.PokePeriod) => #9
        #8 -> MemberSelector(Selector=Lights.PokeDutyCycle) => #10
        #9, #10 -> Zip
        -> Multiply
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #14
        #7, #14 -> Delay(DueTime=PT0.5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=6, PrintSubjectName=PrintCode)

    GroupWorkflow OptoOnsetTime
        SubscribeSubject IntendedOptoOnset
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.009S, Period=PT0S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject LEDStart => #6
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #9
        #6, #9 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject TimedOptoOnset
        -> MulticastSubject StartOpto
        -> WorkflowOutput
    -> GroupWorkflow SoundOnsetTime => #4
        WorkflowInput Source1 => #0
        SubscribeSubject IntendedSoundOnset
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=14, PrintSubjectName=PrintCode)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.009S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds) => #7
        SubscribeSubject LEDStart => #8
        #7, #8 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject TimedSoundOnset
        -> IntProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow FixationBroken => #5
        SubscribeSubject CenterPoke => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
          Expression: !Value
        -> MemberSelector(Selector=Seconds) => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> Zip
        -> Subtract
        -> MulticastSubject TimedFT
        -> IntProperty(Value=-2)
        -> WorkflowOutput
    #4, #5 -> Merge
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=7, PrintSubjectName=PrintCode)
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Stimulus => #13
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Optogenetics.Duration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #7
    SubscribeSubject LEDStart => #8
    #7, #8 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject TimedLED
    -> MulticastSubject EndOpto

    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #15
    WorkflowInput Source1
    -> GroupWorkflow PlaySound(Description="Presents the noise stimulus to the animal")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StartSound
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=8, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #19
    #15, #19 -> Zip
    -> Subtract
    -> MulticastSubject TimedRT => #22
    -> Condition "UseRT == 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus") => #24
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StopSound
        -> WorkflowOutput
    #22 -> Condition "UseRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #26
    #24, #26 -> Merge => #27
    #22 -> Condition "RT >= BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0) => #29
    #22 -> Condition "RT < BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StopSound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #32
    #29, #32 -> Merge => #33
    #27, #33 -> Zip
    -> MemberSelector(Selector=Item2) => #35
    GroupWorkflow MaxRT
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxReactionTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition "UseMaxRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMaxRt)
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StopSound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #41
    #35, #41 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Decision => #15
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=9, PrintSubjectName=PrintCode)

    GroupWorkflow Answer => #2
        SubscribeSubject LeftPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLeft => #1
          Expression: Value
        -> IntProperty(Value=-1) => #2
        SubscribeSubject RightPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingRight => #4
          Expression: Value
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> MulticastSubject ResponsePoke
        -> Condition !UseRT
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject StopSound
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Seconds) => #11
        #4 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Merge
        -> Take(Count=1)
        -> MulticastSubject LNPStart
        -> WorkflowOutput
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #5
    #2, #5 -> Zip
    -> Subtract
    -> MulticastSubject TimedMT => #8
    -> Condition "TimedMT >= MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> SelectMany LNPTime => #11
        SubscribeSubject IntendedLNP => #0
        SubscribeSubject Timestamp => #1
        SubscribeSubject LNPStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        #0, #4 -> Zip
        -> Subtract
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(Math.Max(it, 0))
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.009S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #10
        SubscribeSubject LeftPoke
        -> Condition IsLeft => #12
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        #10, #12 -> WithLatestFrom => #13
        SubscribeSubject RightPoke
        -> Condition IsRight => #15
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #10, #15 -> WithLatestFrom => #16
        #13, #16 -> Merge => #17
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingLNP
          Expression: !(Item2.Value)
        -> MemberSelector(Selector=Item2.Seconds) => #19
        #17 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLNP
          Expression: Item2.Value
        -> MemberSelector(Selector=Item1.Seconds) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject LNPStart => #23
        #22, #23 -> Zip
        -> Subtract
        -> MulticastSubject TimedLNP => #26
        SubscribeSubject IntendedLNP => #27
        #26, #27 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP >= IntendedLNP"
      Expression: Item1 >= Item2
    -> GroupWorkflow EvaluateAnswer => #13
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        SubscribeSubject LeftOrRight => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
          Expression: Item1 == Item2
        -> IntProperty(Value=2) => #7
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
          Expression: Item1 != Item2
        -> IntProperty(Value=1) => #9
        #7, #9 -> Merge
        -> MulticastSubject Outcome
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=10, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    #11 -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP < IntendedLNP"
      Expression: Item1 < Item2
    -> IntProperty(Value=-6) => #15
    #8 -> Condition "TimedMT < MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-5) => #17
    GroupWorkflow MaxMT
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StopSound
        -> WorkflowOutput
    -> IntProperty(Value=-4) => #22
    SubscribeSubject LNPStart
    -> Skip(Count=1) => #24
    #22, #24 -> TakeUntil => #25
    #13, #15, #17, #25 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it > 0
-> SelectMany Reward => #17
    WorkflowInput Source1 => #0
    SubscribeSubject Outcome => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
      Expression: it == 2
    -> GroupWorkflow WaterDelivery => #5
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject WaterDelivery
        -> WorkflowOutput
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
      Expression: it == 1
    -> SelectMany Penalty(Description=FIXME)
        GroupWorkflow BoxLEDBlink
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=Cues.PenaltyLight)
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=Lights.BoxPeriod) => #9
            #8 -> MemberSelector(Selector=Lights.BoxDutyCycle) => #10
            #9, #10 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #14
            #7, #14 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=11, PrintSubjectName=PrintCode)

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=1) => #8
    #5, #8 -> Merge
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#15 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #18
  Expression: it <= 0
#13 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #19
  Expression: it != 0
#11 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #20
  Expression: it != 0
#9 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #21
  Expression: it != 0
#18, #19, #20, #21 -> Merge
-> SelectMany Abort => #23
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Optogenetics.Duration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> MulticastSubject EndOpto

    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=10, PrintSubjectName=PrintCode)
    -> SelectMany Penalty
        GroupWorkflow BoxLEDBlink
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=Cues.PenaltyLight)
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=Lights.BoxPeriod) => #9
            #8 -> MemberSelector(Selector=Lights.BoxDutyCycle) => #10
            #9, #10 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #14
            #7, #14 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=11, PrintSubjectName=PrintCode)

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#7 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it != 0
-> Delay(DueTime=PT0.01S) => #25
#17, #23, #25 -> Merge
-> Take(Count=1)
-> Repeat => #28
GroupWorkflow EndSession => #29
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.Duration)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10M, Period=PT0S)
    -> StringProperty => #4
    SubscribeSubject EndSessionButton => #5
    #4, #5 -> Merge
    -> WorkflowOutput
#28, #29 -> TakeUntil
-> WorkflowOutput
